/*
  This macro displays the positions added on the TES multiphoton microscope.
  It gives a visual map of where all the positions are located in x-y.
  This is helpful in finding if there are overlaps between different positions.

Following assumpution was made:
  z=6V corresponds to a 512x512 um^2 field
  z=4V corresponds to a 512x512*(4/6) =  341 um^2 field
  z=2V corresponds to a 512x512*(2/6) =  171 um^2 field

// flexible  canvas size based on x and y coordinates of added positions
// center the postion squares
// checkbox option to open two txt files corresponding to marker coordinates and postions respectively

  Author: Ved P. Sharma, October 26, 2017
*/

var xOffset, yOffset;
Dialog.create("Display Positions...");
Dialog.addNumber("\nX-Y calibration (zoom voltage):", 6);
Dialog.addCheckbox("Open two files (marker coordinates and cell positions)", false);
Dialog.show();
zoomVoltage = Dialog.getNumber();
openTwoFiles = Dialog.getCheckbox();

posWidth = 512*(zoomVoltage/6); // position width in pixels
extraCanvas = 2*posWidth; 
//extraCanvas = 0; 
	// Enlarge canvas by these many pixels in X and Y, when displaying only cell positions
canvasEnlargeFactor = 1.05;
	// enlarge canvas size by this factor when dsiplaying both markers and cell postions

if(openTwoFiles) {
	path = File.openDialog("Select Marker Cooridinates text file...");
	filestring = File.openAsString(path);
	rows=split(filestring, "\n");
	positions = (rows.length - 4)/5 + 1;
	if(positions != 3)
		exit("Error: more than 3 positions found in Marker Coordinates text file.");
	xm = newArray(positions); // m for marker
	ym = newArray(positions);
	xmt = newArray(positions); // t for translated
	ymt = newArray(positions);

	for(i=0, a=0; i<rows.length; i++){
		if(startsWith(rows[i], "[Position")) {
			xm[a] = -parseFloat(substring(rows[i+1], 11));
				// negative sign to convert the top right coordinate system of the microscope stage
				// to the top left coordinate system of ImageJ
			ym[a] = parseFloat(substring(rows[i+2], 11));
			a++;
		}
	}		
// determine canvas size by fitting circle to 3 points, followed by rectangle fit
	newImage("Temp", "8-bit black", 100, 100, 1);
	makeSelection("point",xm,ym);
	run("Fit Circle");
	getSelectionBounds(xRect, yRect, wdRect, htRect);
	close(); // close temp image
print(xRect, yRect, wdRect, htRect);
	canvasSize = canvasEnlargeFactor*wdRect; // making canvasSize 20% larger than the marker circle
	canvasWidth = canvasSize;
	canvasHeight = canvasSize;
	xOffset = canvasEnlargeFactor*abs(xRect);
	yOffset = canvasEnlargeFactor*abs(yRect);
	
}

path = File.openDialog("Select Cell Positions text file...");
filestring = File.openAsString(path);
rows=split(filestring, "\n");
positions = (rows.length - 4)/5 + 1;
print(positions+" cell positions found.");
x = newArray(positions);
y = newArray(positions);

for(i=0, a=0; i<rows.length; i++){
	if(startsWith(rows[i], "[Position")) {
		x[a] = -parseFloat(substring(rows[i+1], 11));
			// negative sign to convert the top-right coordinate system of the microscope stage
			// to the top left coordinate system of ImageJ
		y[a] = parseFloat(substring(rows[i+2], 11));
//print(x[a], y[a]);
		a++;
	}
}		

// find canvas size for cell postions without markers
if(!openTwoFiles) {
	Array.getStatistics(x, min, max, mean, stdDev);
	if(min*max < 0) // points are distributed on both sides of y-axis
		canvasWidth = abs(min) + abs(max);
//		canvasWidth = abs(min) + abs(max) + posWidth;
	else
		canvasWidth = 2*maxOf(abs(min), abs(max));
	canvasWidth = canvasWidth + extraCanvas;
	Array.getStatistics(y, min, max, mean, stdDev);
	if(min*max < 0) // points are distributed on both sides of x-axis
		canvasHeight = abs(min) + abs(max);
//		canvasHeight = abs(min) + abs(max) + posWidth;
	else
		canvasHeight = 2*maxOf(abs(min), abs(max));
	canvasHeight = canvasHeight + extraCanvas;
	xOffset = canvasWidth/2;
	yOffset = canvasHeight/2;
//print(canvasWidth, canvasHeight, xOffset, yOffset);
}

newImage("Positions", "8-bit black", canvasWidth, canvasHeight, 1);
//run("Set Scale...", "distance=1 known=1 unit=um");

if(openTwoFiles) {
	circleSize = canvasWidth/40;
	print("circle size = "+circleSize);
	setColor("cyan");
	for(i=0; i<3; i++) {
		xmt[i] = xm[i]+xOffset;
		ymt[i] = ym[i]+yOffset;	
		fillOval(xmt[i]-circleSize/2, ymt[i]-circleSize/2, circleSize, circleSize);
	}
	
	// draw circle encompassing marker coordinates
	makeSelection("point",xmt,ymt);
	run("Fit Circle");
	run("Line Width...", "line=20"); //setLineWidth() does not work
	run("Draw", "slice");
}

// draw X and Y axes
setColor("white");
setLineWidth(16);
drawLine(0, yOffset, canvasWidth, yOffset); // draw x-axis in white
drawLine(xOffset, 0, xOffset, canvasHeight); // draw y-axis in white
//setFont("SansSerif", 132, "antiliased");
//drawString("zoom Voltage = "+zoomVoltage+"V", 50, 200);



run("Overlay Options...", "stroke=red width=10 fill=none show");
for(i=0; i<a; i++) {
	makeRectangle(x[i]+xOffset-posWidth/2, y[i]+yOffset-posWidth/2, posWidth, posWidth); 
//	makeRectangle(x[i]+xOffset, y[i]+yOffset, posWidth, posWidth); 
		// x and y offsets to translate origin (0, 0) to the center of the field
		// posWidth/2 correction to center each position
	run("Add Selection...");
}
run("Select None");
run("Labels...", "color=white font=12 show");


